##################################
#
# simulate Dcav,air
#
##################################



##################################
# geometry definition
##################################

:start geometry definition:

    ##################################
    #
    # world filled air (8 m x 8 m x 8 m) 
    #
    ##################################
    :start geometry:
        library  = egs_ndgeometry
        type     = EGS_XYZGeometry
        name     = world
        
        x-planes = -16, 16
        y-planes = -16, 16
        z-planes = -101, 30

        :start media input:
            media = VACUUM
        :stop media input:

    :stop geometry:



    ##################################
    #
    # Farmer Chamber 30013
    #
    ##################################

    ####################
    # The chamber at (0, 0, 0) of egs coordinate
    # to simulate Dcav,air in air
    ####################
    :start geometry:
        library = egs_cones
        type = EGS_ConeStack
        name = chamber
        axis = 0 -1.3 0 0 1 0
        
        ####################
        # tip
        ####################
        # lay 1
        :start layer:
            thickness = 0.03936
            top radii = 0. 0.5
            bottom radii = 0.0667 0.5
            media = PMMA VACUUM
        :stop layer:
        # lay 2
        :start layer:
            thickness = 0.01058
            top radii = 0. 0.0667 0.5 
            bottom radii = 0.01792 0.08462 0.5
            media = GRAPHITE PMMA VACUUM
        :stop layer:
        # lay 3
        :start layer:
            thickness = 0.15514
            top radii = 0. 0.01792 0.08462 0.5
            bottom radii = 0.26288 0.2808 0.3475 0.5 
            media = AIR GRAPHITE PMMA VACUUM
        :stop layer:
        # lay 4
        :start layer:
            thickness = 0.01959
            top radii = 0.26288 0.2808 0.3475 0.5 
            bottom radii = 0.29608 0.314 0.3475 0.5
            media = AIR GRAPHITE PMMA VACUUM
        :stop layer:
        # lay 5
        :start layer:
            thickness = 0.00526
            top radii = 0.29608 0.314 0.3475 0.5 
            bottom radii = 0.305 0.314 0.3475 0.5
            media = AIR GRAPHITE PMMA VACUUM
        :stop layer:


        ####################
        # electrode 
        ####################
        # lay 6
        :start layer:
            thickness = 2.07
            top radii = 0.055 0.305 0.314 0.3475 0.5
            bottom radii = 0.055 0.305 0.314 0.3475 0.5
            media = Al1098 AIR GRAPHITE PMMA VACUUM
        :stop layer:

        
        ####################
        # bottom 
        ####################
        # lay 7
        :start layer:
            thickness = 0.050
            top radii = 0.055 0.075 0.28 0.305 0.314 0.3475 0.5
            bottom radii = 0.055 0.075 0.28 0.305 0.314 0.3475 0.5
            media = Al1098 AIR GRAPHITE AIR GRAPHITE PMMA VACUUM
        :stop layer:
        # lay 8
        :start layer:
            thickness = 0.040
            top radii = 0.055 0.075 0.175 0.21 0.305 0.314 0.3475 0.5
            bottom radii = 0.055 0.075 0.175 0.21 0.305 0.314 0.3475 0.5
            media = Al1098 AIR Al2011 GRAPHITE AIR GRAPHITE PMMA VACUUM
        :stop layer:
        # lay 9
        :start layer:
            thickness = 0.11
            top radii = 0.055 0.115 0.175 0.21 0.245 0.305 0.314 0.3475 0.5
            bottom radii = 0.055 0.115 0.175 0.21 0.245 0.305 0.314 0.3475 0.5 
            media = Al1098 PEEK Al2011 GRAPHITE AIR Al2011 GRAPHITE PMMA VACUUM
        :stop layer:
        # lay 10
        :start layer:
            thickness = 0.11
            top radii = 0.08 0.115 0.175 0.21 0.245 0.305 0.314 0.3475 0.3975 0.5
            bottom radii = 0.08 0.115 0.175 0.21 0.245 0.305 0.314 0.3475 0.3975 0.5
            media = Al1098 PEEK Al2011 GRAPHITE AIR Al2011 GRAPHITE PMMA Al2011 VACUUM
        :stop layer:
        
        set label = chamber_cavity_label 20 30 40 51

    :stop geometry:

    #####################
    # put chamber in world_with_water_phantom
    #####################
    :start geometry:
        library       = egs_genvelope
        name          = chamber_in_air 
        base geometry = world
        inscribed geometries = chamber
    :stop geometry:



    simulation geometry = chamber_in_air

:stop geometry definition:



##################################
# Source definition 
##################################
:start source definition:
#   :start source:
#       library          = egs_phsp_source
#       phase space file = WYQ180.egsphsp1 
#       name             = WYQ180
#       particle type    = all
#   :stop source:
    
    # collimated_source
    :start source:
        library = egs_collimated_source
        name    = last180_spec

        :start source shape:
            type = point
            position = 0 0 -100
        :stop source shape:

        :start target shape:
            library = egs_circle
            radius = 5.25
        :stop target shape:

        distance = 100
        charge = 0

        :start spectrum:
            type = tabulated spectrum
            spectrum file = last180.spectrum
        :stop spectrum:
    :stop source:

    simulation source = last180_spec

:stop source definition:


##################################
# media definition 
##################################
:start media definition:

   AE= 0.512
   UE= 50.511
   AP= 0.001
   UP= 50

   :start AIR:
      density correction file= air_dry_nearsealevel 
      bremsstrahlung correction= NRC
   :stop AIR:

   :start WATER:
      elements = H, O
      number of atoms = 2, 1
      rho = 0.9982
      bremsstrahlung correction= NRC
   :stop WATER:

   :start Cu:
      density correction file= copper 
      bremsstrahlung correction= NRC
   :stop Cu:

   :start PMMA:
      density correction file= polymethylmethacrylate__lucite___perspex___plexiglas_ 
      bremsstrahlung correction= NRC
   :stop PMMA:


   #################
   # Al EN AW-2011
   #################
   :start Al2011:
      elements = Si, Fe, Cu, Zn, Pb, Al
      mass fractions = 0.4, 0.7, 5.5, 0.3, 0.3, 92.8
      rho = 2.82
      bremsstrahlung correction = NRC
   :stop Al2011:

   #################
   # Al EN AW-1098
   #################
   :start Al1098:
      elements = Si, Fe, Cu, Zn, Ti, Al
      mass fractions = 0.01, 0.006, 0.003, 0.015, 0.003, 99.963
      rho = 2.7
      bremsstrahlung correction = NRC
   :stop Al1098:

   :start GRAPHITE:
      elements = C
      number of atoms = 1
      rho = 1.85
      bremsstrahlung correction = NRC
   :stop GRAPHITE:

   :start PEEK:
      elements = C, H, O
      number of atoms = 19, 14, 3
      rho = 1.32
      bremsstrahlung correction = NRC
   :stop PEEK:

:stop media definition:


##################################
# Scoring options 
##################################
:start scoring options:

    ### Scoring geometry
    :start calculation geometry:
        geometry name         = chamber_in_air 
        cavity regions        = chamber_cavity_label  # outer air shell
        cavity mass           = 7.26264E-4 # mass in g for each region
    :stop calculation geometry:

    ### fluence scoring requested (common to all calculation geometries)
    :start fluence scoring:
        minimum energy = 0.00
        maximum energy = 0.181
        number of bins = 200
        scale          = linear
    :stop fluence scoring:

:stop scoring options:

##################################
# ausgab object definition 
##################################
:start ausgab object definition: # Output options
    :start ausgab object: # Track scoring (view in egs_view)
        name    = my_tracks
        library = egs_track_scoring
        stop scoring = 1024
    :stop ausgab object:

:stop ausgab object definition:


##################################
# Modify here parameters that should be different from their defaults. 
##################################
:start MC transport parameter:
    Global ECUT                    = 0.521          # Global electron transport cutoff
    Global PCUT                    = 0.001          # Global photon transport cutoff
    Global SMAX                    = 1e10           # Global maximum step-size restriction for e- transport
    ESTEPE                         = 0.25           # Default is 0.25
    XIMAX                          = 0.5            # Default is 0.5, max. value is 1.
    Boundary crossing algorithm    = exact          # exact (default), PRESTA-I
    Skin depth for BCA             = 3              # Default value is 3 for exact boundary crossing
    Electron-step algorithm        = PRESTA-II      # PRESTA-II (default),PRESTA-I
    Spin effects                   = On             # On (default),Off
    Brems angular sampling         = KM             # Simple,KM (default)
    Brems cross sections           = BH             # BH (default),NIST
    Pair angular sampling          = Simple         # Off, Simple (default),KM
    Triplet production             = Off            # On or Off (default)
    Electron Impact Ionization     = On             # On, Off (default), casnati, kolbenstvedt, gryzinski
    Bound Compton scattering       = On             # On, Off, Simple, norej (default)
    Radiative Compton corrections  = Off             # On,  Off (default)
    Rayleigh scattering            = On             # On ,Off (default), custom
    Photoelectron angular sampling = On             # On (default),Off
    Atomic relaxations             = On             # On (default),Off
    Photon cross sections          = mcdf-xcom      # si, epdl, xcom (default) , mcdf-xcom or user-supplied
    Photon cross-sections output   = Off            # Off (default) or On
    Compton cross sections         = comp_xsections # user-supplied
    Photonuclear attenuation       = Off            # Off (default) or On
    Photonuclear cross sections    = default        # default (default) or user-supplied
:stop MC transport parameter:




##################################
# rng definition 
##################################
:start rng definition:
    type = ranmar
    initial seeds = 22 33
:stop rng definition:


##################################
# run control 
##################################
:start run control:
    ncase                       = 1E10
    #nbatch                      = [optional] number of batches to use (default is 10)
    #statistical accuracy sought = [optional] required uncertainty in %
    #max cpu hours allowed       = [optional] max. CPU time allowed
    #calculation                 = [optional] first or restart or combine or analyze
    #geometry error limit        = [optional] number of geometry errors allowed before crashing
:stop run control:
